CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:23
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (directory does contain "GFP")
    Name to assign these images:HTT
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Cy5")
    Name to assign these images:UBQLN2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "RFP")
    Name to assign these images:mApple
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Using mApple creates cell outlines']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
    Select the input image:mApple
    Name the primary objects to be identified:cell_outlines
    Typical diameter of objects, in pixel units (Min,Max):20,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:20
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
EnhanceOrSuppressFeatures:[module_num:6|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notes:['Increases signal to noise ratio for UBQLN2 puncta']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
    Select the input image:UBQLN2
    Name the output image:UBQLN_enhanced
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast

IdentifyPrimaryObjects:[module_num:7|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notes:['Creates UBQLN2 puncta ROIs']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
    Select the input image:UBQLN_enhanced
    Name the primary objects to be identified:UBQLN2_puncta
    Typical diameter of objects, in pixel units (Min,Max):3,8
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:4.0
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
EnhanceOrSuppressFeatures:[module_num:8|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notes:['Increases HTT signal to noise']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
    Select the input image:HTT
    Name the output image:HTT_enhanced
    Select the operation:Enhance
    Feature size:6
    Feature type:Speckles
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    Speed and accuracy:Fast

IdentifyPrimaryObjects:[module_num:9|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notes:['Identifies HTT inclusions ROIs']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
    Select the input image:HTT_enhanced
    Name the primary objects to be identified:HTT_puncta
    Typical diameter of objects, in pixel units (Min,Max):3,14
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:150.0
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
OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:mApple
    Name the output image:Outlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:red
    Select objects to display:cell_outlines
    Select outline color:#00F500
    Select objects to display:HTT_puncta
    Select outline color:#00DCF6
    Select objects to display:UBQLN2_puncta

DisplayDataOnImage:[module_num:11|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
    Display object or image measurements?:Object
    Select the input objects:cell_outlines
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Outlines
    Text color:red
    Name the output image that has the measurements displayed:cell_annotated
    Font size (points):30
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):30
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:12|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
    Display object or image measurements?:Object
    Select the input objects:UBQLN2_puncta
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:cell_annotated
    Text color:#1E85F0
    Name the output image that has the measurements displayed:cell_ubqln_annotated
    Font size (points):8
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):3
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:13|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
    Display object or image measurements?:Object
    Select the input objects:HTT_puncta
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:cell_ubqln_annotated
    Text color:#39F34B
    Name the output image that has the measurements displayed:Annotated
    Font size (points):8
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):3
    Display mode:Text
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    Display background image?:Yes
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
RelateObjects:[module_num:14|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
    Parent objects:cell_outlines
    Child objects:HTT_puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:15|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
    Parent objects:cell_outlines
    Child objects:UBQLN2_puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:16|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
    Parent objects:HTT_puncta
    Child objects:UBQLN2_puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:Annotated
    Select method for constructing file names:From image filename
    Select image name for file prefix:mApple
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:yo_annotated
    Saved file format:png
    Output file location:Default Input Folder sub-folder|Box Sync/Lab Synch folder/Projects/NS329 (HTT+UBQLN2) and NS330 (Q134m)/annotated
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureColocalization:[module_num:18|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
    Hidden:2
    Hidden:1
    Select an image to measure:HTT_enhanced
    Select an image to measure:UBQLN_enhanced
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select an object to measure:cell_outlines

MeasureObjectSizeShape:[module_num:19|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
    Select objects to measure:cell_outlines
    Select objects to measure:HTT_puncta
    Select objects to measure:UBQLN2_puncta
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:20|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
    Hidden:1
    Select an image to measure:HTT
    Select objects to measure:HTT_puncta

MeasureObjectIntensity:[module_num:21|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
    Hidden:1
    Select an image to measure:UBQLN2
    Select objects to measure:UBQLN2_puncta

MeasureObjectIntensity:[module_num:22|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
    Hidden:1
    Select an image to measure:mApple
    Select objects to measure:cell_outlines

ExportToSpreadsheet:[module_num:23|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Box Sync/Lab Synch folder/Projects/NS329 (HTT+UBQLN2) and NS330 (Q134m)/CellProfiler calculations
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:HTT_puncta|Parent_cell_outlines,HTT_puncta|Number_Object_Number,HTT_puncta|Intensity_MeanIntensity_HTT,HTT_puncta|AreaShape_Area,HTT_puncta|Children_UBQLN2_puncta_Count,cell_outlines|AreaShape_Area,cell_outlines|Number_Object_Number,cell_outlines|Intensity_MeanIntensity_mApple,cell_outlines|Location_Center_Y,cell_outlines|Location_Center_X,cell_outlines|Location_Center_Z,cell_outlines|Correlation_Correlation_HTT_enhanced_UBQLN_enhanced,cell_outlines|Children_UBQLN2_puncta_Count,cell_outlines|Children_HTT_puncta_Count,UBQLN2_puncta|Parent_cell_outlines,UBQLN2_puncta|Parent_HTT_puncta,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:NS329_
    Overwrite existing files without warning?:No
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